PsychoPy2experiment version="2020.1.1"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = piloto1
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Routines
  Routine grave
    SoundComponent sound_2
      sound = 200
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 100
      volume = 0.005
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    MouseComponent mouse_2
      clickable = polyon_3,polygon_4
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_3
      fillColor = $[1,1,1]
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.7, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_4
      fillColor = $[1,1,1]
      pos = (0.5, 0)
      shape = rectangle
      size = (0.7, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = black
      letterHeight = 0.1
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      text = izquierda
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    TextComponent text_4
      color = black
      letterHeight = 0.1
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      text = derecha
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  Routine agudo
    SoundComponent sound_1
      sound = 2500
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 100
      volume = 0.005
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    MouseComponent mouse
      clickable = polygon,polygon_2
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = $[1,1,1]
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.7, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      fillColor = $[1,1,1]
      pos = (0.5, 0)
      shape = rectangle
      size = (0.7, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text
      color = black
      letterHeight = 0.1
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      text = derecha
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    TextComponent text_2
      color = black
      letterHeight = 0.1
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      text = izquierda
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine agudo
    Routine grave
  LoopTerminator trials
